PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  color = $[-1.000,-1.000,-1.000]
  Experiment info = {u'gender': u'', u'age': u'', u'participant': u'', u'name': u'', u'dominant eye': u''}
  Units = pix
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  expName = exp1_py2
  Screen = 1
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Routines
  Routine block_feedback
    CodeComponent block_fb_code
      Begin Experiment:
        msg = ''
      Begin Routine:
        corrTrials = main_loop.data['main_resp.corr']
        total_trials = len(main_loop.data['main_resp.keys'])
        tota_sec_ts = len(main_loop.data['sec_resp.keys'])
        corr_sec_ts = main_loop.data['sec_resp.corr']
        corr_rate = corrTrials.sum() / float(total_trials)
        sec_rate = corr_sec_ts.sum() / float(12)

        meanRt = main_loop.data['main_resp.rt'].mean()
        msg= u"您在本组实验中正确率为%.2f, 反应时%.2f \n\n您在第二任务中正确率为%.2f" %(corr_rate, meanRt, sec_rate)
    TextComponent block_fb_finish_text
      text = 您已经完成一组，请休息30秒。
      stopVal [duration (s)] = 30
      pos = (0, 74.45)
      startVal [time (s)] = 0.0
      letterHeight = 37.23
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    TextComponent block_fb_rt
      text [set every repeat] = $msg
      stopVal [duration (s)] = 30
      pos = (0, -60)
      startVal [time (s)] = 0.0
      letterHeight = 37.23
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    TextComponent block_start_text
      text = 休息结束后可以按空格继续
      startVal [time (s)] = 30
      letterHeight = 37.43
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    KeyboardComponent block_start_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 30
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  Routine main_blank
    CodeComponent main_blank_code
      End Routine:
        thisExp.addData('ITI', ITI)
      Each Frame:
        import random

        ITI = random.randint(800,1500)

        ITI = ITI * 0.001
    TextComponent main_blank_text
      stopVal [duration (s)] = $ITI
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine tobii_calibra
    ptc_init_component ptc_init
      datafile = data.xlsx
      embed = True
      id = 0
    ptc_cal_component ptc_cal
      move_duration = 1.5
      shuffle = True
      calibration_points = [[-800, -400], [800, -400], [0, 0], [-800, 400], [800, 400]]
      text_color = white
      start_key = space
      enable_mouse = True
      decision_key = space
      show_status = True
  Routine instuction
    TextComponent instr_text
      text = 欢迎参加实验,按空格开始
      startVal [time (s)] = 0.0
      letterHeight = 74.45
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    KeyboardComponent instr_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine trial
    ptc_rec_component ptc_rec
    TextComponent main_b
      stopVal [duration (frames)] = 12
      startVal [frame N] = 0.0
      letterHeight = 0.1
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    TextComponent main_fix
      text = +
      startVal [frame N] = 12
      letterHeight = 74.45
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    SoundComponent main_sound
      sound [set every repeat] = 'sounds/' + str($sound)
      startVal [frame N] = 12
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    ImageComponent main_image
      stopVal [duration (frames)] = 12
      pos [set every repeat] = [picposition, 0]
      startVal [frame N] = 72
      image [set every repeat] = 'images/' + str($image)
      size = (312, 399)
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    ImageComponent sec_image
      stopVal [duration (frames)] = 12
      pos [set every repeat] = (picposition, 0)
      startVal [frame N] = 72
      image = sec_task.png
      size = (312, 413)
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    TextComponent main_target
      text = ●
      pos [set every repeat] = [dotposition, 0]
      startVal [frame N] = 87
      letterHeight = 74.45
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    KeyboardComponent main_resp
      correctAns = $correctAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'f','j'
      startVal [frame N] = 87
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    KeyboardComponent sec_resp
      correctAns = space
      storeCorrect = True
      forceEndRoutine = False
      allowedKeys = 'space'
      startVal [frame N] = 72
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    CodeComponent code
      Begin Experiment:
        sec_cond = list(np.random.choice(np.arange(6, 66), 4, replace=False))
  Routine before_cal
    TextComponent before_text
      text = 按空格开始眼动校准
      startVal [time (s)] = 0.0
      letterHeight = 74.45
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    KeyboardComponent before_cal_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine before_test
    TextComponent before_test_text
      text = 校准结束，按空格开始正式实验。
      startVal [time (s)] = 0.0
      letterHeight = 74.45
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    KeyboardComponent before_test_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine thanks
    TextComponent thanks_text
      text = 本组实验结束，请休息两分钟。
      startVal [time (s)] = 0.0
      letterHeight = 74.45
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    KeyboardComponent thanks_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine instuction
  Routine before_cal
  Routine tobii_calibra
  Routine before_test
  LoopInitiator main_loop loopType="TrialHandler"
    conditionsFile = block1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'sound': u'6.gif', 'picposition': 241.29, 'image': u'T_319_e.wav', 'correctAns': u'j', 'trigger': 3333, 'dotposition': 241.29},
      {'sound': u'41.gif', 'picposition': 241.29, 'image': u'T_120_e.wav', 'correctAns': u'j', 'trigger': 3333, 'dotposition': 241.29},
      {'sound': u'84.gif', 'picposition': 241.29, 'image': u'T_706_e.wav', 'correctAns': u'f', 'trigger': 3333, 'dotposition': -241.29},
      {'sound': u'5.gif', 'picposition': 241.29, 'image': u'T_134_e.wav', 'correctAns': u'f', 'trigger': 3333, 'dotposition': -241.29},
      {'sound': u'75.gif', 'picposition': 241.29, 'image': u'T_380_e.wav', 'correctAns': u'f', 'trigger': 3333, 'dotposition': -241.29},
      {'sound': u'79.gif', 'picposition': 241.29, 'image': u'T_699_e.wav', 'correctAns': u'j', 'trigger': 3333, 'dotposition': 241.29},
      {'sound': u'U_382_e.wav', 'picposition': -241.29, 'image': u'NF53.gif', 'correctAns': u'f', 'trigger': 2111, 'dotposition': -241.29},
      {'sound': u'U_420_e.wav', 'picposition': -241.29, 'image': u'UM26.gif', 'correctAns': u'f', 'trigger': 2211, 'dotposition': -241.29},
      {'sound': u'N_105_e.wav', 'picposition': -241.29, 'image': u'UM28.gif', 'correctAns': u'j', 'trigger': 1212, 'dotposition': 241.29},
      {'sound': u'N_724_e1.wav', 'picposition': -241.29, 'image': u'UM4.gif', 'correctAns': u'f', 'trigger': 1211, 'dotposition': -241.29},
      {'sound': u'N_245_e.wav', 'picposition': 241.29, 'image': u'NM81.gif', 'correctAns': u'j', 'trigger': 1122, 'dotposition': 241.29}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
    Routine trial
    Routine main_blank
  LoopTerminator main_loop
  Routine thanks
